#pragma once
#include "HSLErrLib.hsl"
#include "HSLMlStarStepReturnLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSL_LiquidClassLib.hsl"
#include "HSLInhecoTEC\\HSLInhecoTECLib.hsl"
#include "HSLDaisyChainedTiltModule.hsl"
#include "HSLBarcodeReader.hsl"
#include "HslHamHeaterShakerLib.hsl"
#include "HSLDaisyChainedMediaLine.hsl"
#include "HSLDaisyChainCommunication.hsl"
#include "Hamilton pH Module\\Hamilton pH Module.hsl"
#include "Hamilton pH Module\\Hamilton pH Station Dryer Module.hsl"
#include "Hamilton pH Module\\Hamilton pH Station Washer Module.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace STAR_OEM_TOOLKIT {
  function BarcodeReader_Initialize( variable COMPORT, variable & o_stepReturn ) void ;
  function BarcodeReader_Read( variable & barcode ) void ;
  function Carrier_Load( device & ML_STAR, variable carrierName, variable barcodeFileName, variable barcodeReadPositions, variable & o_stepReturn_CarrierBC, variable & o_stepReturn_PositionsBCs, variable & o_stepReturn_PositionsBCMasks, variable & o_stepReturn_PositionsIDs, variable & o_CarrierBC, variable & o_PositionsBCs[] ) void ;
  function Carrier_Unload( device & ML_STAR, variable carrierName, variable & o_stepReturn ) void ;
  function Channels_1mL_COREGrippers_Get( device & ML_STAR, sequence & plateSequence, sequence & lidSequence, sequence & toolSequence, variable sequenceCounting, variable transportMode, variable gripForce, variable gripperToolChannel, variable gripWidth, variable gripHeight, variable widthBefore, variable gripSpeed, variable Zspeed, variable checkPlate, variable & o_stepReturn ) void ;
  function Channels_1mL_COREGrippers_Move( device & ML_STAR, sequence & destinationSequence, variable xAcceleration, variable & o_stepReturn ) void ;
  function Channels_1mL_COREGrippers_Place( device & ML_STAR, sequence & plateSequence, sequence & lidSequence, sequence & toolSequence, variable sequenceCounting, variable transportMode, variable ejectToolWhenFinish, variable Zspeed, variable platePressOnDistance, variable xAcceleration, variable checkPlate, variable & o_stepReturn ) void ;
  function Channels_1mL_Dispense( device & ML_STAR, sequence & dispenseSequence, variable & volumeArray[], variable channelVariable, variable liquidClass, variable sequenceCounting, variable channelUse, variable dispenseMode, variable capacitiveLLD, variable liquidFollowing, variable submergeDepth, variable liquidHeight, variable mixCycles, variable mixPosition, variable mixVolume, variable airTransportRetractDist, variable touchOff, variable zMoveAfterStep, variable sideTouch, variable dispPositionAboveTouch, variable & o_stepReturn, variable & o_liquidLevels_mm[], variable & o_liquidLevels_mL[] ) void ;
  function Channels_1mL_TipEject( device & ML_STAR, sequence & wasteSequence, variable channelVariable, variable sequenceCounting, variable channelUse, variable useDefaultWaste, variable & o_stepReturn ) void ;
  function Channels_1mL_TipPickUp( device & ML_STAR, sequence & tipSequence, variable channelVariable, variable sequenceCounting, variable channelUse, variable & o_stepReturn ) void ;
  function Channels_1ml_Aspirate( device & ML_STAR, sequence & aspirateSequence, variable & volumeArray[], variable channelVariable, variable liquidClass, variable sequenceCounting, variable channelUse, variable aspirateMode, variable capacitiveLLD, variable pressureLLD, variable liquidFollowing, variable submergeDepth, variable liquidHeight, variable maxLLdDifference, variable mixCycles, variable mixPosition, variable mixVolume, variable airTransportRetractDist, variable touchOff, variable aspPosAboveTouch, variable & o_stepReturn, variable & o_liquidLevels_mm[], variable & o_liquidLevels_mL[] ) void ;
  function Inheco_TEC_Initialize( variable ControllerID, variable SimulationMode, variable & o_stepReturn ) void ;
  function Inheco_TEC_SetTarget( variable ControllerID, variable DeviceID, variable TargetTemperature, variable & o_stepReturn ) void ;
  function Inheco_TEC_StartTemperatureControl( variable ControllerID, variable DeviceID, variable & ErrorCode, variable & o_stepReturn ) void ;
  function Inheco_TEC_StopTemperatureControl( variable ControllerID, variable DeviceID, variable & o_stepReturn ) void ;
  function Inheco_TEC_Terminate( variable StopAllDevices, variable & o_stepReturn ) void ;
  function Initialize( device & ML_STAR, variable initializeAlways, variable & o_stepReturn ) void ;
  function MPH384_Aspirate( device & ML_STAR, sequence & aspirateSequence, variable aspirateVolume, variable liquidClass, variable sequenceCounting, variable aspirateMode, variable capacitiveLLD, variable liquidFollowing, variable submergeDepth, variable liquidHeight, variable mixCycles, variable mixPosition, variable mixVolume, variable airTransportRetractDist, variable & o_stepReturn, variable & o_liquidLevel_mm, variable & o_liquidLevel_mL, variable & o_stepReturn_PositionIDs ) void ;
  function MPH384_Dispense( device & ML_STAR, sequence & dispenseSequence, variable dispenseVolume, variable liquidClass, variable sequenceCounting, variable dispenseMode, variable capacitiveLLD, variable liquidFollowing, variable submergeDepth, variable liquidHeight, variable mixCycles, variable mixPosition, variable mixVolume, variable airTransportRetractDist, variable zMoveAfterStep, variable sideTouch, variable & o_stepReturn, variable & o_liquidLevel_mm, variable & o_liquidLevel_mL, variable & o_stepReturn_PositionIDs ) void ;
  function MPH384_TipEject( device & ML_STAR, sequence & tipEjectSequence, variable sequenceCounting, variable tipEjectToKnownPosition, variable & o_stepReturn, variable & o_stepReturn_PositionIDs ) void ;
  function MPH384_TipPickUp( device & ML_STAR, sequence & tipSequence, variable tipMode, variable headPatternVariable, variable sequenceCounting, variable reducedPatternMode, variable headPatternAsVariable, variable pickUpFromTipLifter, variable & o_stepReturn, variable & o_stepReturn_PositionIDs ) void ;
  function MPH96_Aspirate( device & ML_STAR, sequence & aspirateSequence, variable aspirateVolume, variable channelVariable, variable liquidClass, variable sequenceCounting, variable aspirateMode, variable capacitiveLLD, variable liquidFollowing, variable submergeDepth, variable liquidHeight, variable mixCycles, variable mixPosition, variable mixVolume, variable airTransportRetractDist, variable & o_stepReturn, variable & o_liquidLevel_mm, variable & o_liquidLevel_mL, variable & o_stepReturn_PositionIDs ) void ;
  function MPH96_Dispense( device & ML_STAR, sequence & dispenseSequence, variable dispenseVolume, variable liquidClass, variable sequenceCounting, variable dispenseMode, variable capacitiveLLD, variable liquidFollowing, variable submergeDepth, variable liquidHeight, variable mixCycles, variable mixPosition, variable mixVolume, variable airTransportRetractDist, variable zMoveAfterStep, variable sideTouch, variable & o_stepReturn, variable & o_liquidLevel_mm, variable & o_liquidLevel_mL, variable & o_stepReturn_PositionIDs ) void ;
  function MPH96_TipEject( device & ML_STAR, sequence & tipEjectSequence, variable sequenceCounting, variable tipEjectToKnownPosition, variable & o_stepReturn, variable & o_stepReturn_PositionIDs ) void ;
  function MPH96_TipPickUp( device & ML_STAR, sequence & tipSequence, variable channelVariable, variable sequenceCounting, variable reducedPatternMode, variable & o_stepReturn, variable & o_stepReturn_PositionIDs ) void ;
  private function MPH_GetLastLLD_Level( variable i_liquidClass, device & ML_STAR, variable i_labwareID, variable & o_flt_LastLiquidLevel ) void ;
  function SendFirmwareCommand( variable FirmwareCommand, device & ML_STAR, variable FirmwareParameter, variable & o_stepReturn ) void ;
  function TiltModule_Initialize( variable Module, variable Comport, variable TraceLevel, variable Simulate, variable & o_stepReturn ) void ;
  function TiltModule_MoveToPosition( variable Module, variable Position, variable & o_stepReturn ) void ;
  function iSWAP_Get( device & ML_STAR, sequence & plateSequence, sequence & lidSequence, variable sequenceCounting, variable movementType, variable transportMode, variable labwareOrientation, variable gripForce, variable inverseGrip, variable collisionControl, variable gripMode, variable retractDistance, variable liftUpHeight, variable gripWidth, variable tolerance, variable gripHeight, variable widthBefore, variable & o_stepReturn ) void ;
  function iSWAP_Move( device & ML_STAR, sequence & destinationSequence, variable collisionControl, variable gripMode, variable & o_stepReturn ) void ;
  function iSWAP_Park( device & ML_STAR, variable showCollisionCheckDialog, variable & o_stepReturn ) void ;
  function iSWAP_Place( device & ML_STAR, sequence & plateSequence, sequence & lidSequence, variable sequenceCounting, variable movementType, variable transportMode, variable labwareOrientation, variable collisionControl, variable retractDistance, variable liftUpHeight, variable & o_stepReturn ) void ;
  function pH_Measure( variable i_intModuleID, variable i_fltTemperature, variable i_strProbePattern, variable & o_fltpHProbe_1, variable & o_fltpHProbe_2, variable & o_fltpHProbe_3, variable & o_fltpHProbe_4, variable & o_stepReturn ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function Channels_1ml_Aspirate( device & ML_STAR, sequence & aspirateSequence, variable & volumeArray[], variable channelVariable, variable liquidClass, variable sequenceCounting, variable channelUse, variable aspirateMode, variable capacitiveLLD, variable pressureLLD, variable liquidFollowing, variable submergeDepth, variable liquidHeight, variable maxLLdDifference, variable mixCycles, variable mixPosition, variable mixVolume, variable airTransportRetractDist, variable touchOff, variable aspPosAboveTouch, variable & o_stepReturn, variable & o_liquidLevels_mm[], variable & o_liquidLevels_mL[] ) void {
    private variable numberOfPositions;
    private variable loopCounter1;
    private variable getLiquidLevels_return;
    private variable labwareID;
    private variable positionID;
    private variable lbwContainersAreConnected;
    private variable height;
    private variable calculatedVolume;
    o_stepReturn = 0;
    o_liquidLevels_mm.SetSize( 0);
    o_liquidLevels_mL.SetSize( 0);
    onerror goto errLabel_1 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      	o_stepReturn = arrRetValues[2];
    }
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
      	getLiquidLevels_return = arrRetValues[2];
    }
    numberOfPositions = StepReturn::GetNumberOfPositions(o_stepReturn);
    o_liquidLevels_mm.SetSize(0);
    o_liquidLevels_mL.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < numberOfPositions;)
      {
        loopCounter1 = loopCounter1 + 1;
        height = StepReturn::GetLastLiquidLevel(loopCounter1, getLiquidLevels_return);
        o_liquidLevels_mm.AddAsLast(height);
        labwareID = StepReturn::GetLabwareId(loopCounter1, o_stepReturn);
        positionID = StepReturn::GetPositionId(loopCounter1, o_stepReturn);
        lbwContainersAreConnected = 0;
        if (labwareID > "")
        {
          if (positionID > "")
          {
            onerror goto errLabel_2 ;
            err.Clear();
            {
                    object decklayout;
              		object labware;
              		object rectRack;
              		variable tmpIsConnected (0);
                 // get the deck layout
              		decklayout = ML_STAR.GetDeckLayoutObject();
              		if ( !decklayout.IsNull() )
              		{
                			labware = decklayout.Labware(labwareID);
                			if ( !labware.IsNull() )
                			{
                  				labware.GetObject("IRectRack2", rectRack);
                  				if ( !rectRack.IsNull() )
                  				{
                    					lbwContainersAreConnected = rectRack.ConnectedCtr;  // 1= connected, 0=not connected
                    					rectRack.ReleaseObject();
                  				}
                  				else
                  				{
                    					lbwContainersAreConnected = 0;
                  				}
                  				labware.ReleaseObject();
                              decklayout.ReleaseObject();
                              rectRack.ReleaseObject();
                			}
                    }
            }
            errLabel_2 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
            }   /* end if from skip handler if no error */
            calculatedVolume = DevComputeContainerVolume2(ML_STAR, labwareID, positionID, height, 1, lbwContainersAreConnected);
            o_liquidLevels_mL.AddAsLast(calculatedVolume);
          }
        }
      }
    }
  }

  function Channels_1mL_TipPickUp( device & ML_STAR, sequence & tipSequence, variable channelVariable, variable sequenceCounting, variable channelUse, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_3 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      	o_stepReturn = arrRetValues[2];
    }
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function Channels_1mL_Dispense( device & ML_STAR, sequence & dispenseSequence, variable & volumeArray[], variable channelVariable, variable liquidClass, variable sequenceCounting, variable channelUse, variable dispenseMode, variable capacitiveLLD, variable liquidFollowing, variable submergeDepth, variable liquidHeight, variable mixCycles, variable mixPosition, variable mixVolume, variable airTransportRetractDist, variable touchOff, variable zMoveAfterStep, variable sideTouch, variable dispPositionAboveTouch, variable & o_stepReturn, variable & o_liquidLevels_mm[], variable & o_liquidLevels_mL[] ) void {
    private variable getLiquidLevels_return;
    private variable labwareID;
    private variable calculatedVolume;
    private variable height;
    private variable lbwContainersAreConnected;
    private variable positionID;
    private variable loopCounter1;
    private variable numberOfPositions;
    o_stepReturn = 0;
    o_liquidLevels_mm.SetSize( 0);
    o_liquidLevels_mL.SetSize( 0);
    onerror goto errLabel_4 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      	o_stepReturn = arrRetValues[2];
    }
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
      	getLiquidLevels_return = arrRetValues[2];
    }
    numberOfPositions = StepReturn::GetNumberOfPositions(o_stepReturn);
    o_liquidLevels_mm.SetSize(0);
    o_liquidLevels_mL.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < numberOfPositions;)
      {
        loopCounter1 = loopCounter1 + 1;
        height = StepReturn::GetLastLiquidLevel(loopCounter1, getLiquidLevels_return);
        o_liquidLevels_mm.AddAsLast(height);
        labwareID = StepReturn::GetLabwareId(loopCounter1, o_stepReturn);
        positionID = StepReturn::GetPositionId(loopCounter1, o_stepReturn);
        lbwContainersAreConnected = 0;
        if (labwareID > "")
        {
          if (positionID > "")
          {
            onerror goto errLabel_5 ;
            err.Clear();
            {
                    object decklayout;
              		object labware;
              		object rectRack;
              		variable tmpIsConnected (0);
                 // get the deck layout
              		decklayout = ML_STAR.GetDeckLayoutObject();
              		if ( !decklayout.IsNull() )
              		{
                			labware = decklayout.Labware(labwareID);
                			if ( !labware.IsNull() )
                			{
                  				labware.GetObject("IRectRack2", rectRack);
                  				if ( !rectRack.IsNull() )
                  				{
                    					lbwContainersAreConnected = rectRack.ConnectedCtr;  // 1= connected, 0=not connected
                    					rectRack.ReleaseObject();
                  				}
                  				else
                  				{
                    					lbwContainersAreConnected = 0;
                  				}
                  				labware.ReleaseObject();
                              decklayout.ReleaseObject();
                              rectRack.ReleaseObject();
                			}
                    }
            }
            errLabel_5 : {}
            onerror goto 0;
            if (err.GetId() != 0)   /* skip handler if no error */
            {
            }   /* end if from skip handler if no error */
            calculatedVolume = DevComputeContainerVolume2(ML_STAR, labwareID, positionID, height, 1, lbwContainersAreConnected);
            o_liquidLevels_mL.AddAsLast(calculatedVolume);
          }
        }
      }
    }
  }

  function Channels_1mL_TipEject( device & ML_STAR, sequence & wasteSequence, variable channelVariable, variable sequenceCounting, variable channelUse, variable useDefaultWaste, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_6 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      	o_stepReturn = arrRetValues[2];
    }
    errLabel_6 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function Carrier_Load( device & ML_STAR, variable carrierName, variable barcodeFileName, variable barcodeReadPositions, variable & o_stepReturn_CarrierBC, variable & o_stepReturn_PositionsBCs, variable & o_stepReturn_PositionsBCMasks, variable & o_stepReturn_PositionsIDs, variable & o_CarrierBC, variable & o_PositionsBCs[] ) void {
    private variable numberOfPositions;
    private variable loopCounter1;
    private variable positionBC;
    o_stepReturn_CarrierBC = 0;
    o_stepReturn_PositionsBCs = 0;
    o_stepReturn_PositionsBCMasks = 0;
    o_stepReturn_PositionsIDs = 0;
    o_CarrierBC = 0;
    o_PositionsBCs.SetSize( 0);
    onerror goto errLabel_7 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
      	o_stepReturn_CarrierBC = arrRetValues[2];
      	o_stepReturn_PositionsBCs = arrRetValues[3];
      	o_stepReturn_PositionsBCMasks = arrRetValues[4];
      	o_stepReturn_PositionsIDs = arrRetValues[5];
    }
    errLabel_7 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn_CarrierBC = ErrGetDataAt(3);
      o_stepReturn_PositionsBCs = ErrGetDataAt(4);
      o_stepReturn_PositionsBCMasks = ErrGetDataAt(5);
      o_stepReturn_PositionsIDs = ErrGetDataAt(6);
    }   /* end if from skip handler if no error */
    o_CarrierBC = StepReturn::GetStepData(1, o_stepReturn_CarrierBC);
    numberOfPositions = StepReturn::GetNumberOfPositions(o_stepReturn_PositionsBCs);
    o_PositionsBCs.SetSize(0);
    {
      for(loopCounter1 = 0; loopCounter1 < numberOfPositions;)
      {
        loopCounter1 = loopCounter1 + 1;
        positionBC = StepReturn::GetStepData(loopCounter1, o_stepReturn_PositionsBCs);
        o_PositionsBCs.AddAsLast(positionBC);
      }
    }
  }

  function Carrier_Unload( device & ML_STAR, variable carrierName, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_8 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      	o_stepReturn = arrRetValues[2];
    }
    errLabel_8 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function Channels_1mL_COREGrippers_Get( device & ML_STAR, sequence & plateSequence, sequence & lidSequence, sequence & toolSequence, variable sequenceCounting, variable transportMode, variable gripForce, variable gripperToolChannel, variable gripWidth, variable gripHeight, variable widthBefore, variable gripSpeed, variable Zspeed, variable checkPlate, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_9 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      	o_stepReturn = arrRetValues[2];
    }
    errLabel_9 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function Channels_1mL_COREGrippers_Place( device & ML_STAR, sequence & plateSequence, sequence & lidSequence, sequence & toolSequence, variable sequenceCounting, variable transportMode, variable ejectToolWhenFinish, variable Zspeed, variable platePressOnDistance, variable xAcceleration, variable checkPlate, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_10 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      	o_stepReturn = arrRetValues[2];
    }
    errLabel_10 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function Channels_1mL_COREGrippers_Move( device & ML_STAR, sequence & destinationSequence, variable xAcceleration, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_11 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
      	o_stepReturn = arrRetValues[2];
    }
    errLabel_11 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function iSWAP_Get( device & ML_STAR, sequence & plateSequence, sequence & lidSequence, variable sequenceCounting, variable movementType, variable transportMode, variable labwareOrientation, variable gripForce, variable inverseGrip, variable collisionControl, variable gripMode, variable retractDistance, variable liftUpHeight, variable gripWidth, variable tolerance, variable gripHeight, variable widthBefore, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_12 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
      	o_stepReturn = arrRetValues[2];
    }
    errLabel_12 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function iSWAP_Place( device & ML_STAR, sequence & plateSequence, sequence & lidSequence, variable sequenceCounting, variable movementType, variable transportMode, variable labwareOrientation, variable collisionControl, variable retractDistance, variable liftUpHeight, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_13 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      	o_stepReturn = arrRetValues[2];
    }
    errLabel_13 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function iSWAP_Move( device & ML_STAR, sequence & destinationSequence, variable collisionControl, variable gripMode, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_14 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._862562D1_B5BB_48ce_B5E4_9E37F8ABB61E("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"); // MovePlate
      	o_stepReturn = arrRetValues[2];
    }
    errLabel_14 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function iSWAP_Park( device & ML_STAR, variable showCollisionCheckDialog, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_15 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
      	o_stepReturn = arrRetValues[2];
    }
    errLabel_15 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPH96_TipPickUp( device & ML_STAR, sequence & tipSequence, variable channelVariable, variable sequenceCounting, variable reducedPatternMode, variable & o_stepReturn, variable & o_stepReturn_PositionIDs ) void {
    o_stepReturn = 0;
    o_stepReturn_PositionIDs = 0;
    onerror goto errLabel_16 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      	o_stepReturn = arrRetValues[2];
      	o_stepReturn_PositionIDs = arrRetValues[3];
    }
    errLabel_16 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn_PositionIDs = ErrGetDataAt(4);
    }   /* end if from skip handler if no error */
  }

  function MPH96_Aspirate( device & ML_STAR, sequence & aspirateSequence, variable aspirateVolume, variable channelVariable, variable liquidClass, variable sequenceCounting, variable aspirateMode, variable capacitiveLLD, variable liquidFollowing, variable submergeDepth, variable liquidHeight, variable mixCycles, variable mixPosition, variable mixVolume, variable airTransportRetractDist, variable & o_stepReturn, variable & o_liquidLevel_mm, variable & o_liquidLevel_mL, variable & o_stepReturn_PositionIDs ) void {
    private variable labwareID;
    private variable lbwContainersAreConnected;
    private variable positionID;
    o_stepReturn = 0;
    o_liquidLevel_mm = 0;
    o_liquidLevel_mL = 0;
    o_stepReturn_PositionIDs = 0;
    labwareID = SeqGetLabwareId(aspirateSequence);
    positionID = SeqGetPositionId(aspirateSequence);
    onerror goto errLabel_17 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      	o_stepReturn = arrRetValues[2];
      	o_stepReturn_PositionIDs = arrRetValues[3];
    }
    errLabel_17 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn_PositionIDs = ErrGetDataAt(4);
    }   /* end if from skip handler if no error */
    MPH_GetLastLLD_Level(liquidClass, ML_STAR, labwareID, o_liquidLevel_mm);
    lbwContainersAreConnected = 0;
    onerror goto errLabel_18 ;
    err.Clear();
    {
      		object decklayout;
      		object labware;
      		object rectRack;
      		variable tmpIsConnected (0);
         // get the deck layout
      		decklayout = ML_STAR.GetDeckLayoutObject();
      		if ( !decklayout.IsNull() )
      		{
        			labware = decklayout.Labware(labwareID);
        			if ( !labware.IsNull() )
        			{
          				labware.GetObject("IRectRack2", rectRack);
          				if ( !rectRack.IsNull() )
          				{
            					lbwContainersAreConnected = rectRack.ConnectedCtr;  // 1= connected, 0=not connected
            					rectRack.ReleaseObject();
          				}
          				else
          				{
            					lbwContainersAreConnected = 0;
          				}
          				labware.ReleaseObject();
                      decklayout.ReleaseObject();
                      rectRack.ReleaseObject();
        			}
            }
    }
    errLabel_18 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    o_liquidLevel_mL = DevComputeContainerVolume2(ML_STAR, labwareID, positionID, o_liquidLevel_mm, 1, lbwContainersAreConnected);
  }

  private function MPH_GetLastLLD_Level( variable i_liquidClass, device & ML_STAR, variable i_labwareID, variable & o_flt_LastLiquidLevel ) void {
    private variable flt_X_Coord;
    private variable flt_Y_Coord;
    private variable flt_Z_Coord;
    private variable flt_SubmergeDepthCORE;
    private variable str_FW_Digits;
    private variable flt_TipLength;
    private variable int_LLDheight;
    private variable flt_TipLength_corrected;
    private variable int_FW_Digits;
    private variable flt_StepSize;
    private variable int_Steps_mm;
    private variable str_ReturnValueH0RH;
    private variable flt_angle;
    private variable tipType;
    private variable dummy;
    o_flt_LastLiquidLevel = 0;
    flt_SubmergeDepthCORE = 8.0;
    LiquidClassLib::Initialize(ML_STAR, 1);
    LiquidClassLib::SelectLiquidClass(i_liquidClass);
    tipType = LiquidClassLib::GetLiquidClassParameter(LiquidClassLib::LIQUIDCLASS_PARAMS::TipType);
    LiquidClassLib::getTipTypeData(tipType, dummy, dummy, dummy, flt_TipLength);
    flt_TipLength_corrected = flt_TipLength - flt_SubmergeDepthCORE;
    DevGetLabwarePosition(ML_STAR, i_labwareID, flt_X_Coord, flt_Y_Coord, flt_Z_Coord, flt_angle);
    str_ReturnValueH0RH = Translate("");
    flt_StepSize = 0.005;
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	str_ReturnValueH0RH = arrRetValues[3];
    }
    if(0){
      TrcTrace(Translate("str_ReturnValueH0RH: "), str_ReturnValueH0RH);
    }
    str_FW_Digits = StrRight(str_ReturnValueH0RH, 6);
    int_FW_Digits = StrIVal(str_FW_Digits);
    int_Steps_mm = int_FW_Digits * flt_StepSize;
    int_LLDheight = int_Steps_mm - flt_Z_Coord;
    o_flt_LastLiquidLevel = int_LLDheight - flt_TipLength_corrected;
    if(0){
      TrcTrace(Translate("o_flt_LastLiquidLevel: "), o_flt_LastLiquidLevel);
    }
  }

  function MPH96_Dispense( device & ML_STAR, sequence & dispenseSequence, variable dispenseVolume, variable liquidClass, variable sequenceCounting, variable dispenseMode, variable capacitiveLLD, variable liquidFollowing, variable submergeDepth, variable liquidHeight, variable mixCycles, variable mixPosition, variable mixVolume, variable airTransportRetractDist, variable zMoveAfterStep, variable sideTouch, variable & o_stepReturn, variable & o_liquidLevel_mm, variable & o_liquidLevel_mL, variable & o_stepReturn_PositionIDs ) void {
    private variable labwareID;
    private variable lbwContainersAreConnected;
    private variable positionID;
    o_stepReturn = 0;
    o_liquidLevel_mm = 0;
    o_liquidLevel_mL = 0;
    o_stepReturn_PositionIDs = 0;
    labwareID = SeqGetLabwareId(dispenseSequence);
    positionID = SeqGetPositionId(dispenseSequence);
    onerror goto errLabel_19 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      	o_stepReturn = arrRetValues[2];
      	o_stepReturn_PositionIDs = arrRetValues[3];
    }
    errLabel_19 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn_PositionIDs = ErrGetDataAt(4);
    }   /* end if from skip handler if no error */
    MPH_GetLastLLD_Level(liquidClass, ML_STAR, labwareID, o_liquidLevel_mm);
    lbwContainersAreConnected = 0;
    onerror goto errLabel_20 ;
    err.Clear();
    {
      		object decklayout;
      		object labware;
      		object rectRack;
      		variable tmpIsConnected (0);
         // get the deck layout
      		decklayout = ML_STAR.GetDeckLayoutObject();
      		if ( !decklayout.IsNull() )
      		{
        			labware = decklayout.Labware(labwareID);
        			if ( !labware.IsNull() )
        			{
          				labware.GetObject("IRectRack2", rectRack);
          				if ( !rectRack.IsNull() )
          				{
            					lbwContainersAreConnected = rectRack.ConnectedCtr;  // 1= connected, 0=not connected
            					rectRack.ReleaseObject();
          				}
          				else
          				{
            					lbwContainersAreConnected = 0;
          				}
          				labware.ReleaseObject();
                      decklayout.ReleaseObject();
                      rectRack.ReleaseObject();
        			}
            }
    }
    errLabel_20 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    o_liquidLevel_mL = DevComputeContainerVolume2(ML_STAR, labwareID, positionID, o_liquidLevel_mm, 1, lbwContainersAreConnected);
  }

  function MPH96_TipEject( device & ML_STAR, sequence & tipEjectSequence, variable sequenceCounting, variable tipEjectToKnownPosition, variable & o_stepReturn, variable & o_stepReturn_PositionIDs ) void {
    o_stepReturn = 0;
    o_stepReturn_PositionIDs = 0;
    onerror goto errLabel_21 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      	o_stepReturn = arrRetValues[2];
      	o_stepReturn_PositionIDs = arrRetValues[3];
    }
    errLabel_21 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn_PositionIDs = ErrGetDataAt(4);
    }   /* end if from skip handler if no error */
  }

  function Initialize( device & ML_STAR, variable initializeAlways, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_22 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
      	o_stepReturn = arrRetValues[2];
    }
    errLabel_22 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function SendFirmwareCommand( variable FirmwareCommand, device & ML_STAR, variable FirmwareParameter, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_23 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      	o_stepReturn = arrRetValues[3];
    }
    o_stepReturn = Translate("0[01,00,00,0,,Waste,[02,00,00,0,,Waste,[03,00,00,0,,Waste,[04,00,00,0,,Waste,[05,00,00,0,,Waste,[06,00,00,0,,Waste,[07,00,00,0,,Waste,[08,00,00,0,,Waste,");
    errLabel_23 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function TiltModule_Initialize( variable Module, variable Comport, variable TraceLevel, variable Simulate, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_24 ;
    err.Clear();
    o_stepReturn = HSLDaisyChainedTiltModule::Initialize(Module, Comport, TraceLevel, Simulate);
    o_stepReturn = Translate("1");
    errLabel_24 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn = Translate("0");
    }   /* end if from skip handler if no error */
  }

  function TiltModule_MoveToPosition( variable Module, variable Position, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_25 ;
    err.Clear();
    o_stepReturn = HSLDaisyChainedTiltModule::MoveToPosition(Module, Position);
    o_stepReturn = Translate("1");
    errLabel_25 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn = Translate("0");
    }   /* end if from skip handler if no error */
  }

  function Inheco_TEC_Initialize( variable ControllerID, variable SimulationMode, variable & o_stepReturn ) void {
    private variable ErrorCode;
    o_stepReturn = 0;
    onerror goto errLabel_26 ;
    err.Clear();
    o_stepReturn = HSLInhecoTECLib::Initialize(ControllerID, SimulationMode, ErrorCode);
    o_stepReturn = Translate("0");
    errLabel_26 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function Inheco_TEC_StartTemperatureControl( variable ControllerID, variable DeviceID, variable & ErrorCode, variable & o_stepReturn ) void {
    ErrorCode = 0;
    o_stepReturn = 0;
    onerror goto errLabel_27 ;
    err.Clear();
    o_stepReturn = HSLInhecoTECLib::StartTemperatureControl(ControllerID, DeviceID, ErrorCode);
    o_stepReturn = Translate("0");
    errLabel_27 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function Inheco_TEC_SetTarget( variable ControllerID, variable DeviceID, variable TargetTemperature, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_28 ;
    err.Clear();
    o_stepReturn = HSLInhecoTECLib::SetTargetTemperature(ControllerID, DeviceID, TargetTemperature, o_stepReturn);
    o_stepReturn = Translate("0");
    errLabel_28 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function Inheco_TEC_StopTemperatureControl( variable ControllerID, variable DeviceID, variable & o_stepReturn ) void {
    private variable ErrorCode;
    o_stepReturn = 0;
    onerror goto errLabel_29 ;
    err.Clear();
    o_stepReturn = HSLInhecoTECLib::StopTemperatureControl(ControllerID, DeviceID, ErrorCode);
    o_stepReturn = Translate("0");
    errLabel_29 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function Inheco_TEC_Terminate( variable StopAllDevices, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_30 ;
    err.Clear();
    o_stepReturn = HSLInhecoTECLib::Terminate(StopAllDevices);
    o_stepReturn = Translate("0");
    errLabel_30 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      TrcTrace(Translate("step return in toolkit"), o_stepReturn);
    }   /* end if from skip handler if no error */
  }

  function BarcodeReader_Initialize( variable COMPORT, variable & o_stepReturn ) void {
    o_stepReturn = 0;
    onerror goto errLabel_31 ;
    err.Clear();
    TrcTrace(Translate("Trace"), COMPORT);
    HSLBarcodeReader::SetComPort(COMPORT);
    HSLBarcodeReader::DelComBuffer();
    o_stepReturn = Translate("0[01,00,00,0,,Waste,[02,00,00,0,,Waste,[03,00,00,0,,Waste,[04,00,00,0,,Waste,[05,00,00,0,,Waste,[06,00,00,0,,Waste,[07,00,00,0,,Waste,[08,00,00,0,,Waste,");
    errLabel_31 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function BarcodeReader_Read( variable & barcode ) void {
    barcode = 0;
    onerror goto errLabel_32 ;
    err.Clear();
    TrcTrace(Translate("attempting to read barcode "), Translate("attempting to read barcode"));
    barcode = HSLBarcodeReader::Read();
    TrcTrace(barcode, Translate("this is the barcode"));
    errLabel_32 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      barcode = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function pH_Measure( variable i_intModuleID, variable i_fltTemperature, variable i_strProbePattern, variable & o_fltpHProbe_1, variable & o_fltpHProbe_2, variable & o_fltpHProbe_3, variable & o_fltpHProbe_4, variable & o_stepReturn ) void {
    o_fltpHProbe_1 = 0;
    o_fltpHProbe_2 = 0;
    o_fltpHProbe_3 = 0;
    o_fltpHProbe_4 = 0;
    o_stepReturn = 0;
    onerror goto errLabel_33 ;
    err.Clear();
    o_stepReturn = Hamilton_pH_Module::Measure(i_intModuleID, i_fltTemperature, i_strProbePattern, o_fltpHProbe_1, o_fltpHProbe_2, o_fltpHProbe_3, o_fltpHProbe_4);
    errLabel_33 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
    }   /* end if from skip handler if no error */
  }

  function MPH384_Aspirate( device & ML_STAR, sequence & aspirateSequence, variable aspirateVolume, variable liquidClass, variable sequenceCounting, variable aspirateMode, variable capacitiveLLD, variable liquidFollowing, variable submergeDepth, variable liquidHeight, variable mixCycles, variable mixPosition, variable mixVolume, variable airTransportRetractDist, variable & o_stepReturn, variable & o_liquidLevel_mm, variable & o_liquidLevel_mL, variable & o_stepReturn_PositionIDs ) void {
    private variable labwareID;
    private variable lbwContainersAreConnected;
    private variable positionID;
    o_stepReturn = 0;
    o_liquidLevel_mm = 0;
    o_liquidLevel_mL = 0;
    o_stepReturn_PositionIDs = 0;
    labwareID = SeqGetLabwareId(aspirateSequence);
    positionID = SeqGetPositionId(aspirateSequence);
    onerror goto errLabel_34 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._149227F1_42F6_45d3_A8D9_5B97230BA8FF("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"); // Head384Aspirate
      	o_stepReturn = arrRetValues[2];
      	o_stepReturn_PositionIDs = arrRetValues[3];
    }
    errLabel_34 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn_PositionIDs = ErrGetDataAt(4);
    }   /* end if from skip handler if no error */
    MPH_GetLastLLD_Level(liquidClass, ML_STAR, labwareID, o_liquidLevel_mm);
    lbwContainersAreConnected = 0;
    onerror goto errLabel_35 ;
    err.Clear();
    {
      		object decklayout;
      		object labware;
      		object rectRack;
      		variable tmpIsConnected (0);
         // get the deck layout
      		decklayout = ML_STAR.GetDeckLayoutObject();
      		if ( !decklayout.IsNull() )
      		{
        			labware = decklayout.Labware(labwareID);
        			if ( !labware.IsNull() )
        			{
          				labware.GetObject("IRectRack2", rectRack);
          				if ( !rectRack.IsNull() )
          				{
            					lbwContainersAreConnected = rectRack.ConnectedCtr;  // 1= connected, 0=not connected
            					rectRack.ReleaseObject();
          				}
          				else
          				{
            					lbwContainersAreConnected = 0;
          				}
          				labware.ReleaseObject();
                      decklayout.ReleaseObject();
                      rectRack.ReleaseObject();
        			}
            }
    }
    errLabel_35 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    o_liquidLevel_mL = DevComputeContainerVolume2(ML_STAR, labwareID, positionID, o_liquidLevel_mm, 1, lbwContainersAreConnected);
  }

  function MPH384_Dispense( device & ML_STAR, sequence & dispenseSequence, variable dispenseVolume, variable liquidClass, variable sequenceCounting, variable dispenseMode, variable capacitiveLLD, variable liquidFollowing, variable submergeDepth, variable liquidHeight, variable mixCycles, variable mixPosition, variable mixVolume, variable airTransportRetractDist, variable zMoveAfterStep, variable sideTouch, variable & o_stepReturn, variable & o_liquidLevel_mm, variable & o_liquidLevel_mL, variable & o_stepReturn_PositionIDs ) void {
    private variable labwareID;
    private variable lbwContainersAreConnected;
    private variable positionID;
    o_stepReturn = 0;
    o_liquidLevel_mm = 0;
    o_liquidLevel_mL = 0;
    o_stepReturn_PositionIDs = 0;
    labwareID = SeqGetLabwareId(dispenseSequence);
    positionID = SeqGetPositionId(dispenseSequence);
    onerror goto errLabel_36 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._A755BA24_6FEB_4031_A672_BF3D7FC150C5("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"); // Head384Dispense
      	o_stepReturn = arrRetValues[2];
      	o_stepReturn_PositionIDs = arrRetValues[3];
    }
    errLabel_36 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn_PositionIDs = ErrGetDataAt(4);
    }   /* end if from skip handler if no error */
    MPH_GetLastLLD_Level(liquidClass, ML_STAR, labwareID, o_liquidLevel_mm);
    lbwContainersAreConnected = 0;
    onerror goto errLabel_37 ;
    err.Clear();
    {
      		object decklayout;
      		object labware;
      		object rectRack;
      		variable tmpIsConnected (0);
         // get the deck layout
      		decklayout = ML_STAR.GetDeckLayoutObject();
      		if ( !decklayout.IsNull() )
      		{
        			labware = decklayout.Labware(labwareID);
        			if ( !labware.IsNull() )
        			{
          				labware.GetObject("IRectRack2", rectRack);
          				if ( !rectRack.IsNull() )
          				{
            					lbwContainersAreConnected = rectRack.ConnectedCtr;  // 1= connected, 0=not connected
            					rectRack.ReleaseObject();
          				}
          				else
          				{
            					lbwContainersAreConnected = 0;
          				}
          				labware.ReleaseObject();
                      decklayout.ReleaseObject();
                      rectRack.ReleaseObject();
        			}
            }
    }
    errLabel_37 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
    }   /* end if from skip handler if no error */
    o_liquidLevel_mL = DevComputeContainerVolume2(ML_STAR, labwareID, positionID, o_liquidLevel_mm, 1, lbwContainersAreConnected);
  }

  function MPH384_TipEject( device & ML_STAR, sequence & tipEjectSequence, variable sequenceCounting, variable tipEjectToKnownPosition, variable & o_stepReturn, variable & o_stepReturn_PositionIDs ) void {
    o_stepReturn = 0;
    o_stepReturn_PositionIDs = 0;
    onerror goto errLabel_38 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._F80572BC_ED64_4dc5_8D51_2BB7EA308DCD("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"); // Head384TipEject
      	o_stepReturn = arrRetValues[2];
      	o_stepReturn_PositionIDs = arrRetValues[3];
    }
    errLabel_38 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn_PositionIDs = ErrGetDataAt(4);
    }   /* end if from skip handler if no error */
  }

  function MPH384_TipPickUp( device & ML_STAR, sequence & tipSequence, variable tipMode, variable headPatternVariable, variable sequenceCounting, variable reducedPatternMode, variable headPatternAsVariable, variable pickUpFromTipLifter, variable & o_stepReturn, variable & o_stepReturn_PositionIDs ) void {
    o_stepReturn = 0;
    o_stepReturn_PositionIDs = 0;
    onerror goto errLabel_39 ;
    err.Clear();
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._BAE15959_BFAF_451b_AEBC_25AE7E04EB82("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"); // Head384TipPickUp
      	o_stepReturn = arrRetValues[2];
      	o_stepReturn_PositionIDs = arrRetValues[3];
    }
    errLabel_39 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      o_stepReturn = ErrGetDataAt(3);
      o_stepReturn_PositionIDs = ErrGetDataAt(4);
    }   /* end if from skip handler if no error */
  }
} // library namespace
